PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = test-real-time
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Welcome to the experiment!
        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionScreen
    TextComponent Instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Your task is to listen to the played music and respond to the questions shown. The exact procedure is as follows.

        1. 5 to 10 seconds of silence, focus on the white cross on the screen, and relax.

        2. Listen to the music played in a relaxed state. Try not to make any body movements except natural blinking.

        3. Respond to the questions after each music listening trial, the answer should be according to the previously played track.

        Remember to focus on the white cross in the center of the screen at all times, and avoid head, finger, limb, and torso movements (no need to worry if you did move).

        Relax, breathe normally, clarify doubts if any, and press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FinalScreen
    TextComponent ThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank You for participating in the experiment.
        The experiment will end soon.
  Routine StimulusFixation
    TextComponent PreTrialFixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = +
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  Routine AudioAndFixation
    TextComponent DuringTrialFixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    SoundComponent DrumTrack
      sound [set every repeat] = $TrackPath
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
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  Routine EnjoymentRating
    TextComponent KeyboardResponse
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
      text = Please enter your enjoyment rating of the song from 0 to 9.
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    KeyboardComponent key_resp_3
      allowedKeys = '0', '1', '2', '3', '4', '5', '6', '7', '8', '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine InstructionScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimulus/stimuli.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Sno', 1), ('TrackPath', 'Stimulus/DummyTrack1.wav'), ('TrackName', 'DummyTrack1')]),
      OrderedDict([('Sno', 2), ('TrackPath', 'Stimulus/DummyTrack1.wav'), ('TrackName', 'DummyTrack2')]),
      OrderedDict([('Sno', 3), ('TrackPath', 'Stimulus/DummyTrack1.wav'), ('TrackName', 'DummyTrack3')])]
    Routine StimulusFixation
    Routine AudioAndFixation
    Routine EnjoymentRating
  LoopTerminator trials
  Routine FinalScreen
